# 1 "/home/solidnmr/USERtopspin/pp/RESPDOR_vc.jt"
;S-RESPDOR with SR421 recoupling
; Symmetry-based -- Resonance Echo Saturation Pulse Double Resonance
; for 1H observation (f1) and quadrupolar saturation pulse (f2)

; USAGE: 
; this is a 2D experiment with interleaved acquisition of S and S0
; setup pulse length p2, p4 and power levels plw1, plw11, plw2 
; according to your calibrations.
; plw3 should be set to 0W to record S0
; you can exchange plw2 and plw3 role to exchange S and S0 position
; set NBL to 2
; set a list of SR4 loops in vclist
; set TD1 to twice the number of lines in vclist
; 

;for details see:
;1. Chen, L.; Wang, Q.; Hu, B.; Lafon, O.; Trébosc, J.; Deng, F. & Amoureux, 
;	J. Measurement of hetero-nuclear distances using a symmetry-based pulse sequence 
;	in solid-state NMR. Phys. Chem. Chem. Phys., 2010, 12, 9395-9405 DOI: 10.1039/b926546e
;2.  Xingyu Lu, Olivier Lafon, Julien Trébosc, Jean-Paul Amoureux, Detailed analysis of the 
;	S-RESPDOR solid-state NMR method for inter-nuclear distance measurement between 
;	spin-1/2 and quadrupolar nuclei. J. Magn. Reson. 215(2012), 34-49
;3. Chen, L.; Lu, X.; Wang, Q.; Lafon, O.; Trébosc, J.; Deng, F. & Amoureux, J.-P.; Distance 
;	measurement between a spin-1/2 and a half-integer quadrupolar nuclei by solid-state 
;	NMR using exact analytical expressions. J. Magn. Reson., 2010, 206, 269-273 
;	DOI: 10.1016/j.jmr.2010.07.009
;4. Gan, Measuring multiple carbon-nitrogen distances in natural abundant 
;        solids using R-RESPDOR NMR, Chem. Commun., 2006,4712-4714
;5. Gan, Rotary resonance echo double resonance for measuring heteronuclear
;        dipolar coupling under MAS, J. Magn. Reson., 183(2006), 235-241
;6. A. Brinkmann, A. P. M. Kentgens, Proton-Selective O-H Distance Measurements
;      in Fast MAS SSNMR for the Determination of Hydrogen Bond Lengths,
;      J. Am. Chem. Soc., 128(2006), 46
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; Checked for topspin 3.0 Avance II,III version

;parameters:
;d1 : recycle delay
;d31 : =1s/cnst31, 1 rotor period, to check correct cnst31 value
;l30 : 1,2... decided by speed and p4 (for d28 to d30 > 0)
;l1 : set to max value in vclist for calculating max recoupling time (p40)
;p40 : max total RESPDOR recoupling according to L1 (for information)
;cnst31 : spinning speed (in Hz).
;vclist list of L1 loop
;nbl : set to 2
;zgoptns : -DPRESATf1 | -Dsync
; -DPRESATf1 : add presaturation pulses on F1
; -Dsync  : add synchronisation of SR4 trains on MAS trigger

; channel F1
;p2 :  180 degree pulse (pl1)
;p1 : 90 degree pulse (pl1) = p2/2
;p6 : SR4 180deg pulse@pl11 = (0.25/cnst31)
;pl1 : power level for p2 (180deg pulse)
;pl11:  power level for p6 (SR421)
;
; channel F2
;p4 : saturation pulse @ pl2 (1.5 Tr)
;pl2 : power level for p4 (S)
;pl3 : set to 0 W (or 120dB) for S0 
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;$COMMENT=S-RESPDOR experiment with SR421 (for 1H observed)
;$CLASS=Solids
;$DIM=2D
;$TYPE=Any
;$SUBTYPE=REDOR
;$OWNER=Lei.Chen, Qiang Wang, Julien TREBOSC

;-)))))))
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;$COMMENT=decoupling relations
;$CLASS=Solids INCL
;$DIM=
;$TYPE=decoupling
;$SUBTYPE=
;$OWNER=Trebosc
; decoupling include file *****************************

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;---


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;---
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;---

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;---


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;--- untested sequences ---


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;---


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;---
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;---

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;$COMMENT=presaturation loops
;$CLASS=Solids INCL
;$DIM=
;$TYPE=presaturation
;$SUBTYPE=
;$OWNER=Trebosc

;Presat include file ***************************************
;d20 : delai between Presat pulses (p20)
;pl20 : power of Presat pulses (p20)
;l20 : number of Presat pulses (p20)
;p20 : Presat pulses
;ph20 : phase of Presat pulses (p20)
; second presat parameters
;d19 : delai between Presat2 pulses (p21)
;pl19 : power of Presat2 pulses (p19)
;l19 : number of Presat2 pulses (p19)
;p19 : Presat2 pulses
;ph19 : phase of Presat2 pulses (p19)
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;***********************************************************
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;-)

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;-(((((((

"p6=(0.25s/cnst31)"
"d31=1s/cnst31"                  ; one rotor cycle
"d30=((1.8s*l30)/cnst31-(p2/2)-2u)"
"d28=((1.8s*l30)/cnst31-(p4/2)-2u)"
"p1=p2/2"
"d29=((0.2s*l30)/cnst31)"

"p40=8*p6*l1"
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"d28=((1.8s*l30)/cnst31-(p4/2)-2u)"
"d12=p1"


"plw3=0"
define loopcounter nfid
"nfid=td1/2"
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    dccorr
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1 ze
11  d31 
  10m st

;--------------- One run for free : RF stability on 1H... ----------------------------
  d1   rpp14 rpp15

  (1u pl1):f1
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  1u trigpe4


  (p1 ph5):f1 
  (2u pl11):f1 
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;SR421
300 (p6 ph14^):f1 
  (p6 ph14^):f1 
  (p6 ph14^):f1 
  (p6 ph14^):f1 
lo to 300 times c 

  d29 pl3:f2
  (2u pl1 ph6):f1
  (d30 p2 ph6 d30):f1 
  (2u pl11):f1					

   1u trigpe4
   (d12) 
   2u
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   
;SR421
400 (p6 ph15^):f1 
  (p6 ph15^):f1 
  (p6 ph15^):f1 
  (p6 ph15^):f1 
lo to 400 times c 


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;----------------------  recording S  ----------------------------

2 100m
50m st

  d1   rpp14 rpp15
					
  (1u pl1):f1
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  1u trigpe4

  (p1 ph5):f1 
  (2u pl11):f1 

;SR421
3 (p6 ph14^):f1 
  (p6 ph14^):f1 
  (p6 ph14^):f1 
  (p6 ph14^):f1 
lo to 3 times c 
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  d29 pl2:f2
  (2u pl1 ph6):f1
  (d30 p2 ph6 d30):f1  (d28 p4 ph3 d28):f2
  (2u pl11):f1					

   1u trigpe4
   (d12) 
   2u

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   
;SR421
4 (p6 ph15^):f1 
  (p6 ph15^):f1 
  (p6 ph15^):f1 
  (p6 ph15^):f1 
lo to 4 times c 

  goscnp ph31

;----------------------  recording S0  ----------------------------
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100m
  50m st


  d1	 rpp14 rpp15	      
  (1u pl1):f1
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  1u trigpe4


  (p1 ph5):f1 
  (2u pl11):f1 
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;SR421
13 (p6 ph14^):f1 
  (p6 ph14^):f1 
  (p6 ph14^):f1 
  (p6 ph14^):f1 
lo to 13 times c 

   d29 pl3:f2
   (2u pl1):f1
   (d30 p2 ph6 d30):f1  (d28 p4 ph3 d28):f2
   (2u pl11):f1   

   1u trigpe4
   d12 
   2u
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	     
;SR421
14 (p6 ph15^):f1 
  (p6 ph15^):f1 
  (p6 ph15^):f1 
  (p6 ph15^):f1 
lo to 14 times c 

   go=2 ph31
   10m wr #0 if #0 zd  
   1m ivc
   lo to 11 times nfid

HaltAcqu, 1m
exit
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ph3=(8) 0 4 1 5 2 6 3 7
ph5={{0}*8}^2^1^3
ph6=(8) 0 4 1 5 2 6 3 7
ph14=(360) 90 270 90 270 270 90 270 90 210 30 210 30 30 210 30 210 330 150 330 150 150 330 150 330
ph15=(360) 90 270 90 270 270 90 270 90 210 30 210 30 30 210 30 210 330 150 330 150 150 330 150 330
ph31=(8) {0 0 2 2 4 4 6 6}^4^6^2

ph19= 0  \n ph20= 0
