# 1 "/opt/pulse_programs/ppsolide/spdiff.jt"
;spdiff
;avance-version (06/11/09)
;1D sequence
;
;$CLASS=Solids
;$DIM=2D
;$TYPE=
;$SUBTYPE=
;$COMMENT=

;p1 90 deg pulse @ pl1
;pl1 power level of p1
;d4 mixing delay 

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;$COMMENT=presaturation loops
;$CLASS=Solids INCL
;$DIM=
;$TYPE=presaturation
;$SUBTYPE=
;$OWNER=Trebosc

;Presat include file ***************************************
;d20 : delai between Presat pulses (p20)
;pl20 : power of Presat pulses (p20)
;l20 : number of Presat pulses (p20)
;p20 : Presat pulses
;ph20 : phase of Presat pulses (p20)
; second presat parameters
;d19 : delai between Presat2 pulses (p21)
;pl19 : power of Presat2 pulses (p19)
;l19 : number of Presat2 pulses (p19)
;p19 : Presat2 pulses
;ph19 : phase of Presat2 pulses (p19)
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;***********************************************************
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"acqt0=-p1*2/3.14159265358979323846"

"in0=inf1"

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; dimension 2D; AQ_mode  (F1) States-TPPI
define delay MCWRK
define delay MCREST
define loopcounter ST1CNT
"ST1CNT = td1 / 2"
"MCREST = 30m - 30m"
"MCWRK = 0.333333*30m"

    dccorr
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1 ze
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LBLAV, MCWRK
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2 MCWRK 
LBLSTS1, MCWRK 
LBLF1, MCWRK
  MCREST
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  
  d1 pl1:f1
  (p1 ph1 pl1):f1
d0
  (p1 ph2 pl1):f1
d4
  (p1 ph3 pl1):f1
  go=2 ph31
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  MCWRK  wr #0 if #0 zd ip1
  lo to LBLSTS1 times 2
  MCWRK id0
  lo to LBLF1 times ST1CNT
  MCWRK rf #0
  lo to LBLAV times tdav
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exit


ph1=0 2
ph2=0 0 2 2
ph3={0 0 0 0}^2^1^3
ph31={{0 2}^2}^2^1^3
ph19= 0  \n ph20= 0
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;pl1 : f1 channel - power level for pulse (default)
;p1 : f1 channel -  high power pulse
;d1 : relaxation delay; 1-5 * T1
;NS: 1 * n, total number of scans: NS * TD0


;$Id: zg,v 1.9 2006/11/10 10:56:44 ber Exp $
