# 1 "/home/servicermn/Documents/TOPSPINusers/PP/JT/cp_cpmg.jt"
;cp_cpmg.jt (TopSpin 2.0)

;basic cp experiment
;written by HF 1.3.2001
;changed by JOS 05/06/03
;comments added by STE 4.4.2006

;parameters: 
;p3 : proton 90 at power level pl22
;pl22 : p3 power
;p15 : contact time at pl1 (f1) and pl2 (f2)
;pl1 : X power level during contact
;sp0 : proton power level during contact
;pl12 : decoupling power level (if not pl13)
;pl13 : special decoupling power level
;d1 : recycle delay
;p31 : TPPM pulse length
;cpdprg2 : cw, tppm (at pl12), or lgs, cwlg. cwlgs (LG-decoupling 
;spnam0 : use e.g. ramp.100 for variable amplitude CP
;CPMG parameters
;d3 : time to allow pulse ringdown, 10 to 100 us
;d6 : enter duration of FID
;pl21 : p4 power level
;p4 : 180 degree pulse
;l22 : # of echos to be acquired
;zgoptns : -Dfslg, -Dlacq, or blank

;$COMMENT=basic cp experiment, arbitrary contact and decoupling schemes
;$CLASS=Solids
;$DIM=1D
;$TYPE=cross polarisation
;$SUBTYPE=simple 1D
;$OWNER=Bruker

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;Avancesolids.incl
;   for 1
;
;version 1 28.2.2001, written by HF
;	   4.4.2006, complemented by Ste

;switch between 1H or 19F output (H amplifier)
;version 1 28.2.2001, written by HF 	   4.4.2006, 
;complemented by Ste 
;$COMMENT=definitions for setrtp and setnmr
;$CLASS=Solids INCL

;switch between 1H or 19F output (H amplifier) gating pulse for RX22, ADC and HPPR
;$OWNER=Bruker


;gating pulse for RX22, ADC and HPPR


;generate dwell clock


;blank/unblank receiver path


;turn dwell clock on/off


;


;define data sampling for WAHUHA type experiments


;explicit transmitter blanking


;NCO switching


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
define pulse pmlg36
;-)))))))
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;Presat include file ***************************************
;d20 : delai between Presat pulses (p20)
;pl20 : power of Presat pulses (p20)
;l20 : number of Presat pulses (p20)
;p20 : Presat pulses
;ph20 : phase of Presat pulses (p20)
; second presat parameters
;d19 : delai between Presat2 pulses (p19)
;pl19 : power of Presat2 pulses (p19)
;l19 : number of Presat2 pulses (p19)
;p19 : Presat2 pulses
;ph19 : phase of Presat2 pulses (p19)


;***********************************************************

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;-)


;-)


;-(((((((

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;$COMMENT=definition of external trigger output
;$CLASS=Solids INCL
;$OWNER=Bruker


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			;10 usec trigger pulse at TCU connector I cable 6

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;$COMMENT=decoupling relations
;$CLASS=Solids INCL
;$DIM=
;$TYPE=decoupling
;$SUBTYPE=
;$OWNER=Trebosc
; decoupling include file *****************************

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;---


;---


;--- untested sequences ---


;---


;---
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;---


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
define delay del1
define delay del3
"del3=d3-2u"

"del1=del3+2u"


define loopcounter tmpD3
define delay d3best
define loopcounter tmpTD
define loopcounter TDtot
define delay rest
define delay Spik_int 
define delay showInASED


; Calculate best d3 for rotor synchronisation
"tmpD3=(d6+p4/2)*cnst31"
"d3best=(1s*(tmpD3+1)/cnst31)-d6-(p4/2.0)"

;calculate minimum TD to set
"tmpTD=0.5*(((d6*2+d3*2+p4)*l22)+(d6+d3)*2)/dw"
"TDtot=(tmpTD+1)*2"

"rest=aq-(TDtot*dw)"
"Spik_int=1s/(d6*2+d3*2+p4)"
; to make TDtot, etc. show up in ased
"showInASED=TDtot+d3best+Spik_int"

"in0=inf1"

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define delay MCWRK
define delay MCREST
"MCWRK = 0.500000*10m"
"MCREST = 10m - 0.500000*10m"
    dccorr
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1 ze			;accumulate into an empty memory
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2 MCWRK do:f2
  MCREST
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;#include <p15_prot.incl>	
			;make sure p15 does not exceed 10 msec	
			;let supervisor change this pulseprogram if 
			;more is needed


		

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;aq_prot.incl
; Test the rf on-time and duty cycle
;protect against too long acquisition time
;$COMMENT=protect against too long acquisition time
;$CLASS=Solids INCL
;$OWNER=Bruker
1m
if "aq<50.1m" goto Passaq
print "acquisition time exceeds 50m limit!"
goto HaltAcqu
Passaq, 1m


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			;allows max. 50 msec acquisition time, supervisor
			;may change  to max. 1s at less than 5 % duty cycle
			;and reduced decoupling field


  d1


  10u pl22:f2 pl1:f1	;preselect pl12 drive power for F2, pl1 for F1
  (1u adc ph31 syrec)
  (1u ph30:r):f1
  1u setrtp1^0^1^2
  1u setnmr0|0^16
  6u setnmr4|31 \n 4u  setnmr4^31			;trigger for scope, 10 usec
  p3:f2 ph1		;proton 90 pulse
  d0 
  (p15 pl1 ph11):f1 (p15:spf0 pl2 ph10):f2 	;contact pulse with square or ramp
;CPMG part  
   d6 cpds2:f2
  del1 
  (p4 ph2 pl21):f1
  del3
  1u setrtp1|7
  1u setnmr0^0|16
  d6 setrtp1|0|1|2
3 d6 setrtp1|0|1|2
  1u setrtp1^0^1^2
  1u
  del3 setnmr0|0^16
  (p4 pl21 ph3):f1
  2u 
  del3 setnmr0^0|16
  d6 setrtp1|0|1|2
  lo to 3 times l22
  d6
  del3 setrtp1^0^1^2 
  1u do:f2
  
;  go=2 ph31 cpds2:f2 		;select appropriate decoupling sequence, cw or
			;tppm, both executed at power level 12, or lgs
			;executed at power level pl13
  10u 	do:f2	;decoupler off
  rest
 1u setrtp1^7
  rcyc=2
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  MCWRK  wr #0
  MCWRK
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HaltAcqu, 1m		;jump address for protection files
exit			;quit

ph0= 0
ph1= 1 3
ph10= 0
ph11= 1  
ph2=1 1 3 3
ph3=1 1 1 1 3 3 3 3
ph30=0
ph31=2 0
; set phases for presat : ph19 and ph20
ph19= 0  \n ph20= 0
